CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Neurons ', 'Testing different centriole detection', '']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ch01")
    Name to assign these images:Nucleus_stain
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch02")
    Name to assign these images:Cilia_stain
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch03")
    Name to assign these images:Centriole_stain
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch04")
    Name to assign these images:Neurites
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Cilia']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
    Select the input image:Cilia_stain
    Name the primary objects to be identified:Cilia
    Typical diameter of objects, in pixel units (Min,Max):2,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.8
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.0001
    Upper outlier fraction:0.0001
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:3.5
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
GaussianFilter:[module_num:6|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notes:['For centriole']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
    Select the input image:Centriole_stain
    Name the output image:GaussianFilterCentriole
    Sigma:1

IdentifyPrimaryObjects:[module_num:7|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notes:['Centriole', 'In neuron stain it is detecting backgroun nuclei']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
    Select the input image:GaussianFilterCentriole
    Name the primary objects to be identified:Centriole
    Typical diameter of objects, in pixel units (Min,Max):2,5
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.8
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.0001
    Upper outlier fraction:0.0001
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:3.5
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
GaussianFilter:[module_num:8|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notes:['For hoestch']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
    Select the input image:Nucleus_stain
    Name the output image:Nucleus_stainGaussian
    Sigma:1

IdentifyPrimaryObjects:[module_num:9|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notes:['Nuclei']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
    Select the input image:Nucleus_stainGaussian
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Nucleus_stain
    Name the output image:NucleusOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nucleus

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Centriole_stain
    Name the output image:CentrioleOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Centriole

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cilia_stain
    Name the output image:CiliaOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Cilia

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Centriole_stain
    Name the output image:OverlayCC
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Cilia

ImageMath:[module_num:14|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CombinedIm
    Image or measurement?:Image
    Select the first image:CentrioleOverlay
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:NucleusOverlay
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:CiliaOverlay
    Multiply the third image by:1.0
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:NucleusOverlay
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:NucleusOverlay
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|Documents/Projects_Papers/Cilia_Cecilia/CellProfiler/neurons2weeks_excludeLargeNuclie/images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:CentrioleOverlay
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CentrioleOverlay
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|Documents/Projects_Papers/Cilia_Cecilia/CellProfiler/neurons2weeks_excludeLargeNuclie/images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:CiliaOverlay
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CiliaOverlay
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|Documents/Projects_Papers/Cilia_Cecilia/CellProfiler/neurons2weeks_excludeLargeNuclie/images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:CombinedIm
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CombinedIm
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|Documents/Projects_Papers/Cilia_Cecilia/CellProfiler/neurons2weeks_excludeLargeNuclie/images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureObjectSizeShape:[module_num:19|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
    Select object sets to measure:Centriole, Cilia, Nucleus
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:20|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notes:['']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Documents/Projects_Papers/Cilia_Cecilia/CellProfiler/neurons2weeks_excludeLargeNuclie/csv
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Centriole|AreaShape_EulerNumber,Centriole|AreaShape_Eccentricity,Centriole|AreaShape_Compactness,Centriole|AreaShape_Orientation,Centriole|AreaShape_MaxFeretDiameter,Centriole|AreaShape_BoundingBoxMinimum_Y,Centriole|AreaShape_BoundingBoxMinimum_X,Centriole|AreaShape_MinFeretDiameter,Centriole|AreaShape_BoundingBoxArea,Centriole|AreaShape_Center_Y,Centriole|AreaShape_Center_X,Centriole|AreaShape_BoundingBoxMaximum_Y,Centriole|AreaShape_BoundingBoxMaximum_X,Centriole|AreaShape_Extent,Centriole|AreaShape_Area,Centriole|AreaShape_EquivalentDiameter,Centriole|AreaShape_FormFactor,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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